OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Clock stimulator => #0
  Interstimulation interval (in sec) = 3.0
  Stimulation = OVTK_StimulationId_Beep
Keyboard stimulator => #1
  Filename = C:/Users/Diana/AppData/Roaming/openvibe-2.2.0/scenarios/prueba/scripts/prueba-keyboard-to-stimulations.txt
New input=#0, New input(1)=#1 -> Lua Stimulator => #2
  Lua Script = C:/Users/Diana/AppData/Roaming/openvibe-2.2.0/scenarios/prueba/scripts/prueba-lua-script-2.lua
-> Display cue image
  Display images in full screen = true
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_Button4_Pressed
  Cue Image 1 = ${Path_Data}/plugins/simple-visualization/Stimuli/stop.png
  Stimulation 1 = OVTK_StimulationId_Button1_Pressed
  Cue Image 2 = ${Path_Data}/plugins/simple-visualization/Stimuli/stop.png
  Stimulation 2 = OVTK_StimulationId_Button2_Pressed
  Cue Image 3 = ${Path_Data}/plugins/simple-visualization/Stimuli/stop.png
  Stimulation 3 = OVTK_StimulationId_Button3_Pressed
  Cue Image 4 = ${Path_Data}/plugins/simple-visualization/Stimuli/Intrucciones2.png
  Stimulation 4 = OVTK_StimulationId_Label_00
  Cue Image 5 = ${Path_Data}/plugins/simple-visualization/Stimuli/A11.jpg
  Stimulation 5 = OVTK_StimulationId_Label_1F
  Cue Image 6 = ${Path_Data}/plugins/simple-visualization/Stimuli/A12.jpg
  Stimulation 6 = OVTK_StimulationId_Label_20
  Cue Image 7 = ${Path_Data}/plugins/simple-visualization/Stimuli/A13.jpg
  Stimulation 7 = OVTK_StimulationId_Label_21
  Cue Image 8 = ${Path_Data}/plugins/simple-visualization/Stimuli/A14.jpg
  Stimulation 8 = OVTK_StimulationId_Label_22
  Cue Image 9 = ${Path_Data}/plugins/simple-visualization/Stimuli/A15.jpg
  Stimulation 9 = OVTK_StimulationId_Label_23
  Cue Image 10 = ${Path_Data}/plugins/simple-visualization/Stimuli/A16.jpg
  Stimulation 10 = OVTK_StimulationId_Label_24
  Cue Image 11 = ${Path_Data}/plugins/simple-visualization/Stimuli/A17.jpg
  Stimulation 11 = OVTK_StimulationId_Label_25
  Cue Image 12 = ${Path_Data}/plugins/simple-visualization/Stimuli/A18.jpg
  Stimulation 12 = OVTK_StimulationId_Label_26
  Cue Image 13 = ${Path_Data}/plugins/simple-visualization/Stimuli/A19.jpg
  Stimulation 13 = OVTK_StimulationId_Label_27
  Cue Image 14 = ${Path_Data}/plugins/simple-visualization/Stimuli/A20.jpg
  Stimulation 14 = OVTK_StimulationId_Label_28
  Cue Image 15 = ${Path_Data}/plugins/simple-visualization/Stimuli/F11.jpg
  Stimulation 15 = OVTK_StimulationId_Label_29
  Cue Image 16 = ${Path_Data}/plugins/simple-visualization/Stimuli/F12.jpg
  Stimulation 16 = OVTK_StimulationId_Label_2A
  Cue Image 17 = ${Path_Data}/plugins/simple-visualization/Stimuli/F13.jpg
  Stimulation 17 = OVTK_StimulationId_Label_2B
  Cue Image 18 = ${Path_Data}/plugins/simple-visualization/Stimuli/F14.jpg
  Stimulation 18 = OVTK_StimulationId_Label_2C
  Cue Image 19 = ${Path_Data}/plugins/simple-visualization/Stimuli/F15.jpg
  Stimulation 19 = OVTK_StimulationId_Label_2D
  Cue Image 20 = ${Path_Data}/plugins/simple-visualization/Stimuli/F16.jpg
  Stimulation 20 = OVTK_StimulationId_Label_2E
  Cue Image 21 = ${Path_Data}/plugins/simple-visualization/Stimuli/F17.jpg
  Stimulation 21 = OVTK_StimulationId_Label_2F
  Cue Image 22 = ${Path_Data}/plugins/simple-visualization/Stimuli/F18.jpg
  Stimulation 22 = OVTK_StimulationId_Label_30
  Cue Image 23 = ${Path_Data}/plugins/simple-visualization/Stimuli/F19.jpg
  Stimulation 23 = OVTK_StimulationId_Label_31
  Cue Image 24 = ${Path_Data}/plugins/simple-visualization/Stimuli/F20.jpg
  Stimulation 24 = OVTK_StimulationId_Label_32
  Cue Image 25 = ${Path_Data}/plugins/simple-visualization/Stimuli/T11.jpg
  Stimulation 25 = OVTK_StimulationId_Label_33
  Cue Image 26 = ${Path_Data}/plugins/simple-visualization/Stimuli/T12.jpg
  Stimulation 26 = OVTK_StimulationId_Label_34
  Cue Image 27 = ${Path_Data}/plugins/simple-visualization/Stimuli/T13.jpg
  Stimulation 27 = OVTK_StimulationId_Label_35
  Cue Image 28 = ${Path_Data}/plugins/simple-visualization/Stimuli/T14.jpg
  Stimulation 28 = OVTK_StimulationId_Label_36
  Cue Image 29 = ${Path_Data}/plugins/simple-visualization/Stimuli/T15.jpg
  Stimulation 29 = OVTK_StimulationId_Label_37
  Cue Image 30 = ${Path_Data}/plugins/simple-visualization/Stimuli/T16.jpg
  Stimulation 30 = OVTK_StimulationId_Label_38
  Cue Image 31 = ${Path_Data}/plugins/simple-visualization/Stimuli/T17.jpg
  Stimulation 31 = OVTK_StimulationId_Label_39
  Cue Image 32 = ${Path_Data}/plugins/simple-visualization/Stimuli/T18.jpg
  Stimulation 32 = OVTK_StimulationId_Label_3A
  Cue Image 33 = ${Path_Data}/plugins/simple-visualization/Stimuli/T19.jpg
  Stimulation 33 = OVTK_StimulationId_Label_3B
  Cue Image 34 = ${Path_Data}/plugins/simple-visualization/Stimuli/T20.jpg
  Stimulation 34 = OVTK_StimulationId_Label_3C
-> Stimulation listener "Direct (deprecated)"
  Log level to use = Information
Acquisition client => #5
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#5.Signal stream -> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#5.Signal stream -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream=#5.Signal stream, Stimulations stream=#2 -> CSV File Writer
  Filename = C:/Users/Diana/Desktop/database/user3/record2-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false
